<?xml version="1.0" encoding="UTF-8"?>
<batch>
    <batchstep method="io.github.mzmine.modules.io.rawdataimport.RawDataImportModule">
        <parameter name="Raw data file names">
            <file>POSINPUTFILE</file>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_targeted.TargetedPeakDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="MS level">1</parameter>
        <parameter name="Name suffix">detectedPeak</parameter>
        <parameter name="Feature list file">
            <current_file>POSDATABASEFILE</current_file>
        </parameter>
        <parameter name="Field separator">|</parameter>
        <parameter name="Ignore first line">true</parameter>
        <parameter name="Intensity tolerance">0.5</parameter>
        <parameter name="Noise level">10000.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.5</absolutetolerance>
            <ppmtolerance>200.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">5.0</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.csvexport.CSVExportModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">
            <current_file>POSOUTPUTFILE</current_file>
        </parameter>
        <parameter name="Field separator">|</parameter>
        <parameter name="Export common elements">
            <item>Export row identity (main ID)</item>
        </parameter>
        <parameter name="Export data file elements">
            <item>Peak m/z</item>
            <item>Peak RT</item>
            <item>Peak height</item>
            <item>Peak area</item>
            <item>Peak FWHM</item>
            <item>Peak tailing factor</item>
            <item>Peak asymmetry factor</item>
            <item>Peak m/z min</item>
            <item>Peak m/z max</item>
        </parameter>
        <parameter name="Export quantitation results and other information">false</parameter>
        <parameter name="Identification separator">#</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.rawdataimport.RawDataImportModule">
        <parameter name="Raw data file names">
            <file>NEGINPUTFILE</file>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_targeted.TargetedPeakDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="MS level">1</parameter>
        <parameter name="Name suffix">detectedPeak</parameter>
        <parameter name="Feature list file">
            <current_file>NEGDATABASEFILE</current_file>
        </parameter>
        <parameter name="Field separator">|</parameter>
        <parameter name="Ignore first line">true</parameter>
        <parameter name="Intensity tolerance">0.5</parameter>
        <parameter name="Noise level">10000.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>2.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">5.0</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.csvexport.CSVExportModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">
            <current_file>NEGOUTPUTFILE</current_file>
        </parameter>
        <parameter name="Field separator">|</parameter>
        <parameter name="Export common elements">
            <item>Export row identity (main ID)</item>
        </parameter>
        <parameter name="Export data file elements">
            <item>Peak m/z</item>
            <item>Peak RT</item>
            <item>Peak height</item>
            <item>Peak area</item>
            <item>Peak FWHM</item>
            <item>Peak tailing factor</item>
            <item>Peak asymmetry factor</item>
            <item>Peak m/z min</item>
            <item>Peak m/z max</item>
        </parameter>
        <parameter name="Export quantitation results and other information">false</parameter>
        <parameter name="Identification separator">#</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.projectsave.ProjectSaveModule">
        <parameter name="Project file">
            <current_file>SAMPLEBATCHNAME</current_file>
        </parameter>
    </batchstep>
</batch>
